\Each session includes 50 trials, which occurred on a VI
\60 second schedule. On each trial, the both of the light stimulus and
\the sound stimulus are activated for 7s. The off of the
\stimuli result in spout access for 4 seconds.
\Lickometer will record licking times.
\
\Pulse to amplifier will occur at the start of each stimulus period as well as the start
\and end of the trial period.
\
\inputs:
\lickometer
\
\output:
\pulse to amplifier (must design & set up)
\stimulus light 1
\stimulus light 2
\sonalert
\spout

\WANT TO RECORD:
\ time of stimulus start (which should also give LFP pulse)
\ time of spout out
\time of lick
\

\N= trial count
\R = number of rewards received (trials licked)
\T = session timer


^pulse = 1
^spout = 2
^lightR = 4
^lightL = 5
^sound = 8
^lickometer = 4 \input

DIM O = 2 \ time start and time off
DIM C = 49 \ cue time
DIM S = 49 \ spout time
DIM L = 49 \ first lick time
DIM Y = 49 \ number of licks

\ z1 is cue time on
\ z2 is spout time in

\ want to randomly pick variable interval from this list
LIST Q = 30", 35", 40", 45", 50", 55", 60", 65", 70", 75", 80", 85", 90"

S.S.1,
S1,
    0.01": ON ^pulse; SET O(1) = T ---> S2    \ pulse to start and record start time
S2,
    0.05" : OFF ^pulse ---> S3

S3,
    0.01": RANDI F=Q; --->S4  \randomly selects interval time

S4,
    F#T: ON ^pulse; ON ^lightR; ON ^lightL; ON ^sound; Z1 ---> S5  \ z1 for cue time

S5,
    .05": OFF ^pulse ---> S6 \ only want pulse for super short

S6,
    6.95": OFF ^lightR; OFF ^lightL; OFF ^sound; ON ^spout; Z2 ---> S7  \ turns off cues, puts in spout
                                                                        \ z2 for spout time
S7,
    4": OFF ^spout ---> S8  \turns off spout

S8,
    0.01": ADD N; SHOW 1, Trial, N; IF N=50 [@TrueEnd, @FalseContinue]   \ checks if 50 trials have been done
                                  @End: --->S9
                                  @Cont: ---> S3
S9,
    0.01": ON ^pulse; SET O(2) = T ---> S10 \ ending Pulse and recording end time

S10,
    0.05" : OFF ^pulse ---> S11

S11,
    .01": ---> STOPABORTFLUSH



S.S.2, \ timer
S1,
  .01": SET T = T+.01 ---> S1


S.S.3,  \ cue on time on
S1,
    #Z1 ---> S2
S2,
    0.01": SET C(N) = T ---> S1

S.S.4, \ spout in time
S1,
    #Z2 ---> S2
S2,
    0.01": SET S(N) = T ---> S3
S3,
    1#R^Lickometer: SET L(N) = T;  Z3 ---> S1

S.S.5, \ lick counting
S1,
    #Z3 ---> S2
S2,
    #R^Lickometer: add i ---> S3
S3,
    .01": SET Y(N) = i ---> SX
